PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 2020_ShortExperimentalTrial
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Routines
  Routine Introduction
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the sniff olfactometer!

        Clicking will advance to a refresher session.
        Each time, you will be asked to identify the odor in the bottle.

        Please click to continue.
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import time
        import serial
        import PY_arduino

        ser = serial.Serial('/dev/cu.usbmodem1471', 115200, timeout=1)
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Ready
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = When you are ready to inhale, click!
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Inhale
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Inhale!
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  Routine Puff
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if Squeeze1 == 'left':
            puff_bottle = b'0'

        elif Squeeze1 == 'center':
            puff_bottle = b'2'

        elif Squeeze1 == 'right':
            puff_bottle = b'4'


        ser.write(puff_bottle)
        print (puff_bottle)
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Exhale
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Exhale!
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  Routine Response
    RatingScaleComponent rating
      categoryChoices = green,blank
      forceEndRoutine = True
      labels = What do you smell?
      pos = 0, -0.4
      scaleDescription = Odor
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Conclusion
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thank you! :)
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Jan2020_Training.csv
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('Squeeze1', 'left'), ('corr0', 'sample 1')]),
      OrderedDict([('Squeeze1', 'center'), ('corr0', 'sample 2')]),
      OrderedDict([('Squeeze1', 'right'), ('corr0', 'sample 3')])]
    Routine Ready
    Routine Inhale
    Routine Puff
    Routine Exhale
    Routine Response
  LoopTerminator trials
  Routine Conclusion
