PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Teaching_TwoOdorants
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Routines
  Routine Inhale
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Inhale!
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  Routine Puff
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if Squeeze1 == 'left':
            puff_bottle = b'0'

        elif Squeeze1 == 'center':
            puff_bottle = b'0'

        elif Squeeze1 == 'right':
            puff_bottle = b'0'


        ser.write(puff_bottle)
        print (puff_bottle)
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Exhale
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Exhale!
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  Routine Response
    RatingScaleComponent rating
      categoryChoices = nut,PEG
      forceEndRoutine = True
      pos = 0, -0.4
      scaleDescription = Odor
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = nut
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  Routine Conclusion
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = You did it!
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Instruction
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the sniff olfactometer!

        This is a refresher session.
        Scents will be puffed, and you will be told their identity.

        Please click to continue.
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        import time
        import serial
        import PY_arduino

        ser = serial.Serial('/dev/cu.usbmodem1471', 115200, timeout=1)
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Ready
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = When you are ready to inhale, click!
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Ready2
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = When you are ready to inhale, click!
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    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Inhale2
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Inhale!
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  Routine Puff2
    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        if Squeeze1 == 'left':
            puff_bottle = b'4'

        elif Squeeze1 == 'center':
            puff_bottle = b'4'

        elif Squeeze1 == 'right':
            puff_bottle = b'4'


        ser.write(puff_bottle)
        print (puff_bottle)
  Routine Exhale2
    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Exhale!
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  Routine Response2
    RatingScaleComponent rating_2
      categoryChoices = nut,PEG
      forceEndRoutine = True
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = PEG
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Jan2020_Training.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Squeeze1', 'left'), ('corr0', 'sample 1')]),
      OrderedDict([('Squeeze1', 'center'), ('corr0', 'sample 2')]),
      OrderedDict([('Squeeze1', 'right'), ('corr0', 'sample 3')])]
    Routine Ready
    Routine Inhale
    Routine Puff
    Routine Exhale
    Routine Response
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Jan2020_Training.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Squeeze0', 'left'), ('corr0', 'sample 1')]),
      OrderedDict([('Squeeze0', 'center'), ('corr0', 'sample 2')]),
      OrderedDict([('Squeeze0', 'right'), ('corr0', 'sample 3')])]
    Routine Ready2
    Routine Inhale2
    Routine Puff2
    Routine Exhale2
    Routine Response2
  LoopTerminator trials_2
  Routine Conclusion
